PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = nback_flanker_no_pupil
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  runMode = 0
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Routines
  Routine ITI
    RoutineSettingsComponent ITI
      saveStartStop = False
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    TextComponent fixation
      letterHeight = 0.25
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
      units = norm
      wrapWidth = 1.8
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    CodeComponent trigger_iti
      Code Type = Py
      Begin Routine:
        iti_trigger_started = False
      Each Frame:
        if fixation.status == STARTED and not iti_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=iti_start_code)
            iti_trigger_started = True
  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 108 (task ID for nback flanker task)
        task_ID_code = 108
        print("Starting experiment: < N-back Flanker Task >. Task ID:", task_ID_code)

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        iti_start_code = 9
        letter_start_code = 10
        cue_start_code = 11
        feedback_start_code = 12
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name in ['Cedrus C-POD', 'Cedrus StimTracker Quad'], "Incorrect XID device detected."
            if dev.device_name == 'Cedrus C-POD':
                pod_name = 'C-POD'
            else:
                pod_name = 'M-POD'
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...\n")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print(f"{pod_name}<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.\n")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C/M-POD connected for this session! "
                  "You must start/stop EEG recording manually!\n")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
    CodeComponent condition_setup
      Code Type = Py
      Begin Experiment:
        PUT YOUR CODE HERE FOR YOUR EXPERIMENT
  Routine __end__
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    TextComponent text_thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_thank_you
      saveStartStop = False
      sound [set every repeat] = resource/thank_you.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.7
      syncScreenRefresh = False
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    CodeComponent trigger_trial_block_end
      Code Type = Py
      Begin Routine:
        # End of main experiment trial block
        dev.activate_line(bitmask=block_end_code)
        # no need to wait 500ms as this routine lasts 3.0s before experiment ends
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    CodeComponent blockSetup
      Code Type = Py
      Begin Routine:
        # --- Determine n-back level for this block ---

        THIS CODE TELLS YOU WHAT BLOCK THE PATIENT WILL BE WORKING ON

        # n_back_blocks is defined in the __start__ routine: [0, 1]
        n_back = n_back_blocks[nbackBlocks.thisRepN]  # 0-back for first block, 1-back for second

        # --- Select the correct condition lists for this block ---
        if n_back == 0:
            practiceBlockTrials  = practice0   # 0-back practice
            blockTrials          = trials0     # main 0-back trials

        else:
            practiceBlockTrials  = practice1   # 1-back practice
            blockTrials          = trials1     # main 1-back trials

        # --- Show welcome screen only for FIRST block ---
        if nbackBlocks.thisRepN > 0:
            continueRoutine = False

            # End the main experiment trial block from the previous loop
            dev.activate_line(bitmask=block_end_code)
            core.wait(0.5)  # wait 500ms before next block start trigger
    TextComponent welcomeText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome!


         🚩 WRITE INSTRUCTIONS HERE 🚩


        Press any of the white keys to continue
    KeyboardComponent welcomeKey
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practiceIntro
    RoutineSettingsComponent practiceIntro
      saveStartStop = False
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    CodeComponent setPracInstruct
      Code Type = Py
      Begin Routine:
        THESE ARE PRACTICE INSTRUCTIONS THAT PATIENT WILL SEE DEPENDING ON TASK


        phase = 'practice'

        if n_back == 0:
            practice_instruct_msg = (
                "0-Back Practice\n"
                "\n"
                "\n"
                "Rule: Look for the target letter " + target0 + "\n"
                "\n"
                "Press GREEN key if the CENTER letter is " + target0 + ".\n"
                "Press RED key for any other letter.\n"
                "\n"
                "Wait for the '< >' prompt before responding.\n"
                "\n"
                "\n"
                "Press the green key to start practice trials"
            )

        else:
            practice_instruct_msg = (
                "1-Back Practice\n"
                "\n"
                "\n"
                "Rule: Compare the current CENTER letter to the PREVIOUS CENTER letter\n"
                "\n"
                "Press GREEN key if the CENTER letter is the SAME as the previous CENTER letter.\n"
                "Press RED key if the CENTER letter is DIFFERENT from the previous CENTER letter.\n"
                "\n"
                "Wait for the '< >' prompt before responding.\n"
                "\n"
                "\n"
                "Press the green key to start practice trials"
            )

        # Start a practice block
        dev.activate_line(bitmask=block_start_code)
        # no need to wait 500ms as instructions are displayed
    TextComponent pracInstruct
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_instruct_msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent pracInstructKey
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    CodeComponent trialSetup
      Code Type = Py
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      Begin Routine:
        THIS CODE TELLS US WHAT TASK SHOULD BE TRIGGERED

        # The following variables are already defined at this point:
        #   phase == 'practice'  (set in practiceIntro)  OR
        #   phase == 'main'      (set in trialIntro)
        #
        # blockSetup in the welcome routine created:
        #   practiceBlockTrials : list of practice rows for this block
        #   blockTrials         : list of main rows for this block

        # Get that row from the pre-built list
        if phase == 'practice':
            row = practiceBlockTrials[practice.thisRepN]

        else:
            row = blockTrials[trials.thisRepN]

        # Jittered cueOnset: time when '+' appears, AFTER the letters disappear
        cueOnset = rng.uniform(respCueJitter[0], respCueJitter[1]) + stimulusDur  # stimulusDur = 0.5
      End Routine:
        thisExp.addData('central_letter', row['central_letter'])
        thisExp.addData('flanker_letter', row['flanker_letter'])
        thisExp.addData('congruency', row['congruency'])
        thisExp.addData('correctKey', row['correctKey'])


        THIS CODE ADDS RESULTS TO THE FINAL CSV FOR ANALYSIS
    TextComponent leftFlank
      durationEstim = 0.5
      letterHeight = 0.15
      pos = (-0.15, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulusDur
      text [set every repeat] = $row['flanker_letter']*3
      units = norm
      wrapWidth = 1.8
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    TextComponent central
      durationEstim = 0.5
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulusDur
      text [set every repeat] = $row['central_letter']
      units = norm
      wrapWidth = 1.8
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    TextComponent rightFlank
      durationEstim = 0.5
      letterHeight = 0.15
      pos = (0.15, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulusDur
      text [set every repeat] = $row['flanker_letter']*3
      units = norm
      wrapWidth = 1.8
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    TextComponent respCue
      durationEstim = 3.0
      letterHeight = 0.2
      startEstim = 2.0
      startVal [time (s)] = $cueOnset
      stopVal [duration (s)] = $cueDur
      text = < >
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent earlyResp
      allowedKeys = '1', '2'
      durationEstim = 2.0
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $cueOnset
      store = all keys
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    KeyboardComponent resp
      allowedKeys = '1','2'
      durationEstim = 3.0
      forceEndRoutine = True
      startEstim = 2.0
      startVal [time (s)] = $cueOnset
      stopVal [duration (s)] = $cueDur
      store = first key
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    CodeComponent trigger_trial
      Code Type = Py
      Begin Routine:
        letter_trigger_started = False
        cue_trigger_started = False
      Each Frame:
        if rightFlank.status == STARTED and not letter_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=letter_start_code)
            letter_trigger_started = True

        if respCue.status == STARTED and not cue_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=cue_start_code)
            cue_trigger_started = True
  Routine feedback
    RoutineSettingsComponent feedback
      saveStartStop = False
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    CodeComponent setFbText
      Code Type = Py
      Begin Routine:
        THIS IS THE EXAMPLE FEEBACK THE PATIENT SEES ON THEIR END



        # ---- Feedback logic for practice ----
        # Get early press (before cue)
        early_key = earlyResp.keys

        # Get main press (after cue)
        main_key = resp.keys

        # 1) Too fast: pressed BEFORE cue onset
        if early_key is not None:
            fb_msg = "Too fast. Wait for the cue to respond."

        # 2) Otherwise, if they responded after cue, score it
        elif main_key is not None:
            fb_msg = "Correct!" if main_key == row['correctKey'] else "Wrong"

        # 3) No response at all
        else:
            fb_msg = "Too slow. Please try to respond quickly."
    TextComponent fbText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $fb_msg
      units = norm
      wrapWidth = 1.8
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    CodeComponent trigger_fb
      Code Type = Py
      Begin Routine:
        feedback_trigger_started = False
      Each Frame:
        if fbText.status == STARTED and not feedback_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=feedback_start_code)
            feedback_trigger_started = True
  Routine trialIntro
    RoutineSettingsComponent trialIntro
      saveStartStop = False
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    CodeComponent setInstruct
      Code Type = Py
      Begin Routine:
        THIS GIVES INSTRUCTIONS AGAIN FOR THE MAIN TRIAL RUN


        phase = 'main'

        if n_back == 0:
            instruct_msg = (
                "0-Back Trials\n"
                "\n"
                "\n"
                "Target letter: " + target0 + "\n"
                "\n"
                "Press GREEN key if the CENTER letter is " + target0 + ".\n"
                "Press RED key for any other letter.\n"
                "\n"
                "You can ignore the letters on the sides, and you won't receive feedback.\n"
                "Wait for the '< >' prompt before responding.\n"
                "\n"
                "\n"
                "Press the green key to begin"
            )

        else:
            instruct_msg = (
                "1-Back Trials\n"
                "\n"
                "\n"
                "Press GREEN key if the CENTER letter is the SAME as the previous CENTER letter.\n"
                "Press RED key if the CENTER letter is DIFFERENT from the previous CENTER letter.\n"
                "\n"
                "You can ignore the letters on the sides, and you won't receive feedback.\n"
                "Wait for the '< >' prompt before responding.\n"
                "\n"
                "\n"
                "Press the green key to begin"
            )

        # End the practice block
        dev.activate_line(bitmask=block_end_code)
        core.wait(0.5)  # wait 500ms before next block start trigger

        # Start a main experiment trial block
        dev.activate_line(bitmask=block_start_code)
        # no need to wait 500ms as instructions are displayed
    TextComponent instruct
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent instructKey
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine __start__
  LoopInitiator nbackBlocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = len(n_back_blocks)
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    Routine welcome
    Routine practiceIntro
    Routine ITI
    LoopInitiator practice loopType="TrialHandler"
      loopType = sequential
      nReps = len(practiceBlockTrials)
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      conditions:
        [OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'C'), ('congruency', 'incongruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')]),
        OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'H'), ('congruency', 'congruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')]),
        OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'H'), ('congruency', 'congruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')]),
        OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'H'), ('congruency', 'congruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')]),
        OrderedDict([('n_back', 0), ('central', 'S'), ('flanker_letter', 'H'), ('congruency', 'incongruent'), ('is_target', 0), ('correctAns', 'd'), ('fixed_0back_target', 'H')]),
        OrderedDict([('n_back', 0), ('central', 'C'), ('flanker_letter', 'C'), ('congruency', 'congruent'), ('is_target', 0), ('correctAns', 'd'), ('fixed_0back_target', 'H')]),
        OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'F'), ('congruency', 'incongruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')]),
        OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'H'), ('congruency', 'congruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')])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
      Routine trial
      Routine feedback
      Routine ITI
    LoopTerminator practice
    Routine trialIntro
    Routine ITI
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = len(blockTrials)
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      Routine trial
      Routine ITI
    LoopTerminator trials
  LoopTerminator nbackBlocks
  Routine __end__
